PsychoPy2experiment version="2026.2.4"
Settings
  Audio lib = ptb
  Data filename = os.path.join('results', '%s_%s_%s' % (expInfo['participant'], expName, expInfo['date']))
  Experiment info = {'participant': '', 'session': '01', 'Use dummy VPIXX?': ['no', 'yes']}
  Full-screen window = True
  Monitor = MBA 15-inch
  Screen = 1
  Units = pix
  Window size (pixels) = [1920, 1080]
  color = [-1, -1, -1]
  expName = oddball_cued_builder
  frameRate = 120
  keyboardBackend = PsychToolbox
  runMode = 1
  srEnableInterfaceWithoutConnection = False
  srFileSampleFiltering = FILTER_LEVEL_OFF
  srLiveSampleFiltering = FILTER_LEVEL_OFF
  srModelName = EYELINK 1000 DESKTOP
  srNativeDataFileName = et_data
  srNetIP4Address = 100.1.1.1
  srSamplingRate = 250
  srSimulationMode = False
  srTrackEyes = RIGHT_EYE
  srVOGPupilCenterAlgorithm = ELLIPSE_FIT
  srVOGPupilMeasureTypes = PUPIL_AREA
  srVOGTrackingMode = PUPIL_CR_TRACKING
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Routines
  Routine eyelinkSetup
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    CodeComponent elConfig
      Code Type = Py
      Begin Routine:
        # ======================================================================
        # elConfig  |  "Begin Routine" tab  |  routine: eyelinkSetup
        # ----------------------------------------------------------------------
        # Sets EyeLink sample rate to 500 Hz and writes SESSION_CONFIG into EDF.
        # ======================================================================
        el_tracker = pylink.getEYELINK()

        if not dummy_mode:
            el_tracker.setOfflineMode()
            el_tracker.sendCommand("sample_rate 500")
            el_tracker.sendMessage("SESSION_CONFIG remote_mode sample_rate_500")
    TextComponent elInstructions
      letterHeight = 36
      startVal [time (s)] = 0
      units = pix
      wrapWidth = 1500
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      text:
        Eye tracker setup

        Please keep your head still and look at the screen.

        We will now calibrate the eye tracker: follow the dot with your eyes and look at its centre until it moves.

        (Experimenter: press SPACE to enter Camera Setup.
        Enter = camera image, C = calibrate, V = validate, O = continue to the task.)
    KeyboardComponent key_setup
      allowedKeys = "space"
      forceEndRoutine = True
      startVal [time (s)] = 0
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    InitializeConnection Initialize plugin="psychopy-eyelink"
      disableEyeLinkAudio = False
      dummyMode = True
      hostAddress = 100.1.1.1
      screenUnitType = pix
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      useCustomHostIP = False
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    CameraSetup CameraSetup plugin="psychopy-eyelink"
      backgroundColor = win.color
      calibrationFilenames = 'qbeep.wav','type.wav','error.wav'
      calibrationSounds = defaults
      calibrationType = HV13
      foregroundColor = (1,1,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      targetFilename = images/fixTarget.bmp
      targetSize = 24
      targetType = picture
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  Routine instruct
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    CodeComponent vpixxSetup
      Code Type = Py
      Before Experiment:
        # ======================================================================
        # vpixxSetup  |  "Before Experiment" tab  |  routine: instruct
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: once, as soon as the experiment starts, before the start
        #               dialog appears and before the window opens.
        #
        # WHAT IT DOES: loads VPixx's Python library, pypixxlib.
        #
        # WHAT THE DATAPixx3 DOES IN THIS EXPERIMENT:
        #   The DATAPixx3 is VPixx's box that sits between the stimulus PC and
        #   the projector. Here it has two jobs:
        #     1. MEG TRIGGERS. It reads the colour of the top-left screen pixel
        #        at every screen refresh and sends it to the MEG as a trigger
        #        number ("Pixel Mode"). See triggerSetup.
        #     2. SOUND. It plays the standard and deviant tones from its own
        #        memory, started exactly at a screen refresh, which the PC's
        #        sound card can't do. See toneSetup.
        #
        # WHY THESE COMPONENTS ARE IN THE instruct ROUTINE:
        #   A code component has to live in some routine. The "Experiment" tabs
        #   (Before Experiment, Begin Experiment) run once per session, no
        #   matter which routine they are in.
        #   The four VPixx/sequence components must stay in this order:
        #   vpixxSetup, triggerSetup, toneSetup, sequenceGen. Builder runs their
        #   code top to bottom, and the later ones use names made earlier.
        # ======================================================================

        # ---- Load the VPixx library -----------------------------------------
        # try / except ImportError means: try to load pypixxlib, and if it isn't
        # installed on this computer, carry on without it. The Begin Experiment
        # tab then switches to dummy mode (no DATAPixx3).
        try:
            from pypixxlib import _libdpx as dp
            pypixxlibInstalled = True
        except ImportError:
            dp = None
            pypixxlibInstalled = False

        # "atexit" lets us name a function that must run when the program closes,
        # however it closes (see Begin Experiment).
        import atexit
      Begin Experiment:
        # ======================================================================
        # vpixxSetup  |  "Begin Experiment" tab  |  routine: instruct
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: once, after the start dialog closes and the window
        #               opens, before the first routine starts.
        #
        # WHAT IT DOES:
        #   1. decides between the real DATAPixx3 and dummy mode
        #   2. stops the run if the window is not full screen (unless dummy)
        #   3. connects to the DATAPixx3
        #   4. makes sure the DATAPixx3 is released when the experiment ends
        # ======================================================================

        # ---- 1. Real DATAPixx3 or dummy mode? --------------------------------
        # The "Use dummy VPIXX?" dropdown in the start dialog runs the
        # experiment without a DATAPixx3, for testing on any computer: no MEG
        # triggers, and the tones play through PsychoPy instead (not precisely
        # timed). .get() with default 'no' keeps us safe if the dialog field
        # somehow isn't present; the pypixxlib-not-installed auto-force below
        # still works either way.
        DUMMY_VPIXX = str(expInfo.get('Use dummy VPIXX?', 'no')).lower() == 'yes'

        # Without pypixxlib we can't talk to a DATAPixx3, so force dummy mode
        # and print a loud warning in the Runner window.
        if not pypixxlibInstalled and not DUMMY_VPIXX:
            logging.warning('pypixxlib is not installed, so dummy VPIXX mode was '
                            'turned on: NO MEG TRIGGERS, and tones are NOT precisely '
                            'timed')
            DUMMY_VPIXX = True

        thisExp.addData('dummy_vpixx', DUMMY_VPIXX)

        # ---- 2. Stop if the window is not full screen ------------------------
        # The DATAPixx3 reads the top-left pixel of the whole SCREEN. If our
        # window is smaller than the screen, that pixel belongs to the desktop.
        if not DUMMY_VPIXX and (PILOTING or not win.fullscr):
            message = ('VPixx Pixel Mode triggers need a FULL-SCREEN window in RUN '
                       'mode. Switch Builder from Pilot to Run, or pick "yes" for '
                       '"Use dummy VPIXX?" in the start dialog to test without the '
                       'DATAPixx3.')
            logging.error(message)
            raise RuntimeError(message)

        # ---- 3. Connect to the DATAPixx3 -------------------------------------
        if not DUMMY_VPIXX:
            dp.DPxOpen()                   # connect over USB
            dp.DPxStopAllScheds()          # stop anything an earlier run left playing
            # Pixel Mode OFF for now. EyeLink calibration and the drift check
            # draw their own screens, and their colours must not reach the MEG
            # as triggers. The triggersOn routine switches it on after the
            # drift check.
            dp.DPxDisableDoutPixelMode()
            dp.DPxWriteRegCache()


        # ---- 4. Release the DATAPixx3 when the experiment ends ----------------
        def closeVpixx():
            """Stop sound, switch Pixel Mode off, disconnect."""
            if DUMMY_VPIXX:
                return
            try:
                dp.DPxStopAllScheds()
                dp.DPxDisableDoutPixelMode()
                dp.DPxWriteRegCache()
                dp.DPxClose()
            except Exception:
                pass

        # atexit.register asks Python to run closeVpixx when the program ends.
        atexit.register(closeVpixx)
    CodeComponent triggerSetup
      Code Type = Py
      Before Experiment:
        # ======================================================================
        # triggerSetup  |  "Before Experiment" tab  |  routine: instruct
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: once, as soon as the experiment starts, before the
        #               window opens.
        #
        # WHAT IT DOES: defines the trigger colours for this oddball paradigm.
        #
        # HOW PIXEL MODE TRIGGERS WORK (read this first):
        #   Each time the screen refreshes (120 times per second here) the
        #   DATAPixx3 looks at ONE pixel: the very top-left pixel of the screen.
        #   In "Pixel Mode B" it reads that pixel's BLUE value (0 to 255) and
        #   puts it out on 8 digital lines, which are recorded on the MEG
        #   trigger channel. Red and green are ignored, so we keep them at 0.
        #
        #   Each of these blue values switches on exactly ONE of the 8 lines:
        #       1, 2, 4, 8, 16, 32, 64, 128
        #   Blue = 0 (a black pixel) means all lines are off.
        #
        #   So to "send trigger 2" we colour that one pixel (0, 0, 2) for one
        #   frame, then make it black again. The pixel is too dark to see.
        # ======================================================================

        # ---- The trigger colours used in this experiment --------------------
        TRIG_STANDARD    = (0, 0,  1)   # standard tone onset        -> MEG trigger 1
        TRIG_DEVIANT     = (0, 0,  2)   # deviant tone onset         -> MEG trigger 2
        TRIG_BLINK       = (0, 0,  4)   # BLINK cue onset            -> MEG trigger 4
        TRIG_CUE_LEFT    = (0, 0,  8)   # left-hand cue arrows       -> MEG trigger 8
        TRIG_CUE_RIGHT   = (0, 0, 16)   # right-hand cue arrows      -> MEG trigger 16
        TRIG_FEEDBACK    = (0, 0, 32)   # MISS or WRONG BUTTON       -> MEG trigger 32
        TRIG_OFF         = (0, 0,  0)   # black pixel                -> all lines off

        # Unused values on the 8-line channel: 64 and 128. Reserved for future
        # event markers if the paradigm grows.
      Begin Experiment:
        # ======================================================================
        # triggerSetup  |  "Begin Experiment" tab  |  routine: instruct
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: once, after the window opens, straight after vpixxSetup.
        #
        # WHAT IT DOES:
        #   1. creates the 1x1 trigger pixel in the top-left corner
        #   2. defines the functions that colour it, send triggers and read the
        #      DATAPixx3's clock
        #
        # Pixel Mode itself is switched on later, by the triggersOn routine
        # after the drift check, and off on the thanks screen.
        # ======================================================================

        # ---- 1. The trigger pixel --------------------------------------------
        screenWidthPix, screenHeightPix = win.size
        triggerPixel = visual.Rect(
            win,
            units='pix',
            width=1,
            height=1,
            pos=(-screenWidthPix / 2 + 0.5, screenHeightPix / 2 - 0.5),
            colorSpace='rgb255',
            fillColor=TRIG_OFF,
            lineColor=TRIG_OFF,
            lineWidth=0,
            interpolate=False,
            autoLog=False,
        )
        triggerPixel.setAutoDraw(True)


        # ---- 2. Functions used by the other components -----------------------
        def setTriggerPixel(colour):
            """Give the trigger pixel a new colour. Change appears at next refresh."""
            triggerPixel.fillColor = colour
            triggerPixel.lineColor = colour


        # Per-trial VPIXX-clock timestamps, looked up by name, e.g.
        # vpixxTimes['deviant']. trialLog copies them into the trial log.
        vpixxTimes = {}


        def recordVpixxTime(stimName):
            """Save the DATAPixx3's own clock as the column stimName + '_vp'.
            sendTrigger() queues this to run straight after the refresh that
            showed the trigger, so the time marks that refresh."""
            if DUMMY_VPIXX:
                vpixxTimes[stimName] = None
                return
            dp.DPxUpdateRegCache()
            vpixxTimes[stimName] = dp.DPxGetTime()


        def sendTrigger(colour, stimName):
            """Show a trigger colour on the next screen refresh and log it.
            colour   : one of the TRIG_ values, e.g. TRIG_DEVIANT
            stimName : short name, e.g. 'deviant'; the trial log stores its
                       VPIXX-clock timestamp as stimName + '_vp'."""
            setTriggerPixel(colour)
            # win.callOnFlip(function, argument) runs the function straight
            # after the next screen refresh, the one that shows this trigger.
            win.callOnFlip(recordVpixxTime, stimName)
    CodeComponent toneSetup
      Code Type = Py
      Before Experiment:
        # ======================================================================
        # toneSetup  |  "Before Experiment" tab  |  routine: instruct
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: once, as soon as the experiment starts, before the
        #               window opens.
        #
        # WHAT IT DOES: sets the tone parameters and makes both tones (standard
        #               and deviant).
        #
        # HOW THE SOUND IS PLAYED (read this first):
        #   The tones are played by the DATAPixx3, not the stimulus PC's sound
        #   card. The DATAPixx3 has its own memory and its own audio output.
        #     1. At the start of the experiment we copy BOTH tones, once, into
        #        the DATAPixx3's memory (Begin Experiment tab).
        #     2. Each tone's trial-time play is set up in tone's trialSetup:
        #        we give the DATAPixx3 an audio schedule saying "play buffer at
        #        standardAddress" or "play buffer at deviantAddress", mono.
        #     3. On the frame the tone should start, we tell it "start", timed
        #        to arrive exactly when the screen refreshes.
        # ======================================================================

        import numpy as np

        # ---- Tone parameters -------------------------------------------------
        standardFreqHz   = 1000         # standard tone pitch (Hz)
        deviantFreqHz    = 1200         # deviant tone pitch (Hz)
        toneDurationSec  = 0.400        # both tones 400 ms
        rampSec          = 0.010        # 10 ms fade-in/out (avoids clicks)
        sampleRate       = 48000        # DATAPixx3 audio sample rate
        toneLoudness     = 0.8          # 0 to 1
        audioVolume      = 0.5          # DATAPixx3 output volume, both ears

        # Buffer addresses in the DATAPixx3's audio RAM. 16,000,000 is the
        # address VPixx uses by default; put the deviant 0.5 MB later.
        standardAddress  = 16_000_000
        deviantAddress   = 16_500_000


        def _make_tone(freqHz, duration_s, ramp_s, sample_rate, loudness):
            """Build an int16 pure tone with cosine fade-in/out."""
            nSamples = int(round(duration_s * sample_rate))
            t = np.arange(nSamples) / sample_rate
            wave = np.sin(2 * np.pi * freqHz * t)
            nRamp = int(round(ramp_s * sample_rate))
            fade = 0.5 * (1 - np.cos(np.pi * np.arange(nRamp) / nRamp))
            wave[:nRamp] = wave[:nRamp] * fade
            wave[-nRamp:] = wave[-nRamp:] * fade[::-1]
            return (wave * loudness * 32767).astype(np.int16)


        standardWave = _make_tone(standardFreqHz, toneDurationSec,
                                  rampSec, sampleRate, toneLoudness)
        deviantWave  = _make_tone(deviantFreqHz,  toneDurationSec,
                                  rampSec, sampleRate, toneLoudness)
      Begin Experiment:
        # ======================================================================
        # toneSetup  |  "Begin Experiment" tab  |  routine: instruct
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: once, after the window opens, straight after vpixxSetup
        #               and triggerSetup.
        #
        # WHAT IT DOES: turns the DATAPixx3's audio on and copies BOTH tones
        #               into its memory. In dummy mode (no DATAPixx3) it
        #               prepares ordinary PsychoPy sounds instead.
        # ======================================================================

        if not DUMMY_VPIXX:
            # ---- Real DATAPixx3 ----------------------------------------------
            dp.DPxInitAudCodec()
            # Device opens at volume 0 (silent) every time, so set it here.
            dp.DPxSetAudLeftVolume(audioVolume)
            dp.DPxSetAudRightVolume(audioVolume)
            dp.DPxWriteRegCache()

            # Copy both tones into memory, each at its own address.
            dp.DPxWriteAudioBuffer(standardWave, standardAddress)
            dp.DPxWriteAudioBuffer(deviantWave,  deviantAddress)
            dp.DPxWriteRegCache()

            logging.exp('DATAPixx3 audio ready: standard %d samples, deviant %d samples'
                        % (len(standardWave), len(deviantWave)))

        else:
            # ---- Dummy mode: use PsychoPy sound instead ----------------------
            # Timing is approximate (OS audio latency); use dummy mode for
            # testing only. PsychoPy's sounddevice backend expects a 2D array
            # (samples x channels), so we duplicate the mono tone across two
            # stereo channels via column_stack.
            _standard_float = standardWave.astype(np.float32) / 32767.0
            _deviant_float  = deviantWave.astype(np.float32) / 32767.0
            standardSound = sound.Sound(
                np.column_stack([_standard_float, _standard_float]),
                sampleRate=sampleRate, stereo=True,
            )
            deviantSound  = sound.Sound(
                np.column_stack([_deviant_float, _deviant_float]),
                sampleRate=sampleRate, stereo=True,
            )


        def prep_tone_schedule(kind):
            """Set the DATAPixx3's audio schedule to play one tone (standard
            or deviant) in mono on the next 'start'. Call BEFORE arming
            DPxStartAudSched + DPxWriteRegCacheAfterVideoSync."""
            if DUMMY_VPIXX:
                return
            if kind == 'deviant':
                addr, nSamp = deviantAddress, len(deviantWave)
            else:
                addr, nSamp = standardAddress, len(standardWave)
            # 'mono' sends the buffer to both ears.
            dp.DPxSetAudioSchedule(0.0, sampleRate, nSamp, 'mono', addr)
            dp.DPxWriteRegCache()
    CodeComponent sequenceGen
      Code Type = Py
      Before Experiment:
        # ======================================================================
        # sequenceGen  |  "Before Experiment" tab  |  routine: instruct
        # ----------------------------------------------------------------------
        # Module-level imports. They must live here (not in Begin Routine or
        # Begin Experiment), because Builder wraps those tabs inside the main
        # run() function -- putting `import os` there turns `os` into a local
        # variable, which crashes Builder's own `os.chdir(_thisDir)` call that
        # runs earlier in run().
        # ======================================================================
        import csv
        import json
        import os
        import random
      Begin Routine:
        # ======================================================================
        # sequenceGen  |  "Begin Routine" tab  |  routine: instruct
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: once, when the instructions screen first appears
        #               (before any trials have run).
        #
        # WHAT IT DOES: generates fresh randomized trial sequences for this
        #               session and writes them to CSV files that the Builder
        #               loops read from.
        #
        #   One CSV for the training block (20 trials)
        #   One CSV per main block (3 x 100 trials)
        #
        #   Each CSV row describes a single trial:
        #     cue_hand         'left' or 'right' (which hand to prepare)
        #     expected_button  '7' or '2' (what finger counts as correct)
        #     n_standards      3-7 (number of standard tones before deviant)
        #     isis_json        JSON list of ISIs between consecutive tones
        #     is_training      True for the training CSV, False for the 3 main
        #
        #   Randomization:
        #     cue_hand balanced 50/50 and shuffled within each block
        #     n_standards drawn uniformly from [MIN_STANDARDS, MAX_STANDARDS]
        #     ISIs drawn uniformly from [ISI_MIN, ISI_MAX]
        #
        # WHY GENERATE FRESH EACH SESSION (rather than committing fixed CSVs
        # to the repo): different subjects should see different sequences to
        # avoid order effects contaminating group analyses.
        #
        # WHY HERE (not Begin Experiment):
        #   We need expInfo['participant'] and expInfo['session'] to name the
        #   CSV files (so a session's conditions files live alongside its data
        #   files in results/). Those fields are only populated AFTER the
        #   start dialog closes, so this must run in the Begin Routine of the
        #   first user-facing routine -- not Begin Experiment, which fires
        #   before the dialog.
        #
        # WHERE THE NAMES COME FROM:
        #   expInfo, thisExp - Builder (participant info; data file name base)
        #   csv, json, os,
        #   random           - sequenceGen Before Experiment (module imports)
        #   logging          - PsychoPy (available everywhere)
        # ======================================================================

        # ---- Design parameters (edit here) -----------------------------------
        N_TRAINING_TRIALS   = 20
        N_MAIN_TRIALS       = 100
        N_BLOCKS            = 3
        MIN_STANDARDS       = 3    # min standards before each deviant
        MAX_STANDARDS       = 7    # max standards before each deviant
        ISI_MIN             = 0.700
        ISI_MAX             = 0.900

        # ---- Session results folder ------------------------------------------
        # Builder sets thisExp.dataFileName to the base path for its own output
        # files (no extension). We write our conditions CSVs next to those.
        _results_dir = os.path.dirname(thisExp.dataFileName)
        if _results_dir and not os.path.isdir(_results_dir):
            os.makedirs(_results_dir, exist_ok=True)
        _base_name = os.path.basename(thisExp.dataFileName)


        def _generate_block(n_trials, is_training_flag, seed=None):
            """Make one block's trial list.

            cue_hand is balanced 50/50 and shuffled.
            n_standards is drawn uniformly from [MIN_STANDARDS, MAX_STANDARDS].
            ISIs are drawn uniformly from [ISI_MIN, ISI_MAX], one per standard
            tone (the deviant has none after it).

            is_training_flag is written as a column so trial code can tell
            which outer loop it is in (there are two tone_loops with
            different names, one per outer loop; see tonePresent).
            """
            rng = random.Random(seed)
            half = n_trials // 2
            hands = ['left'] * half + ['right'] * (n_trials - half)
            rng.shuffle(hands)
            trials = []
            for hand in hands:
                n_std = rng.randint(MIN_STANDARDS, MAX_STANDARDS)
                # One ISI per standard (deviant tone comes last, no ISI after)
                isis = [round(rng.uniform(ISI_MIN, ISI_MAX), 4) for _ in range(n_std)]
                trials.append({
                    'cue_hand':        hand,
                    'expected_button': '1' if hand == 'left' else '2',
                    'n_standards':     n_std,
                    'isis_json':       json.dumps(isis),
                    'is_training':     is_training_flag,
                })
            return trials


        def _write_conditions_csv(path, trials):
            """Write a Builder-compatible conditions CSV."""
            fieldnames = ['cue_hand', 'expected_button', 'n_standards',
                          'isis_json', 'is_training']
            with open(path, 'w', newline='') as f:
                w = csv.DictWriter(f, fieldnames=fieldnames)
                w.writeheader()
                w.writerows(trials)


        # Fresh random seed each session (different subjects get different
        # sequences). The seed is recorded in the data file so a run can be
        # reproduced if needed.
        _session_seed = random.randrange(2**31)
        thisExp.addData('session_seed', _session_seed)
        _seed_rng = random.Random(_session_seed)

        # ---- Training block --------------------------------------------------
        training_csv = os.path.join(_results_dir, _base_name + '_training.csv')
        _write_conditions_csv(training_csv,
                              _generate_block(N_TRAINING_TRIALS,
                                              is_training_flag=True,
                                              seed=_seed_rng.randrange(2**31)))

        # ---- Main blocks: one CSV per block ----------------------------------
        # A list of per-block CSV paths, used by the block loop below.
        block_csvs = []
        for b in range(1, N_BLOCKS + 1):
            path = os.path.join(_results_dir,
                                _base_name + f'_block{b}.csv')
            _write_conditions_csv(path, _generate_block(
                N_MAIN_TRIALS, is_training_flag=False,
                seed=_seed_rng.randrange(2**31)))
            block_csvs.append(path)

        logging.exp(f'Generated conditions: training={training_csv}')
        for i, p in enumerate(block_csvs, 1):
            logging.exp(f'Generated conditions: block {i}={p}')

        # ---- Running counts for progress and summary -------------------------
        overall_trial     = 0        # bumped at the start of every trial
        training_results  = []       # list of outcome strings
        main_results      = []       # list of (block, outcome) tuples
    CodeComponent responseClassifySetup
      Code Type = Py
      Before Experiment:
        # Module-level import; see sequenceGen's Before Experiment for why.
        from psychopy.hardware import keyboard
      Begin Experiment:
        # ======================================================================
        # responseClassifySetup  |  "Begin Experiment" tab  |  routine: instruct
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: once, when the experiment starts (after the window
        #               opens, before the first trial).
        #
        # WHAT IT DOES: creates one Keyboard() object shared across the whole
        #               session, and defines the key-to-finger mapping.
        #
        # WHY A SHARED Keyboard() (not a per-trial one):
        #   Each Keyboard() instance maintains its own event buffer. Creating a
        #   new one per trial would reset the buffer and we might miss a press
        #   that landed in the brief window between the old one being destroyed
        #   and the new one listening. Share one and clear/drain it at the
        #   right times.
        #
        # WHY NOT A KeyboardComponent IN THE RESPONSE ROUTINE:
        #   PsychoPy's HID keyboard pipeline on Windows needs the OS message
        #   queue to be pumped by win.flip() for key presses to be noticed. A
        #   KeyboardComponent polls on its own schedule and in some PsychoPy
        #   versions misses presses made between frames. Polling kb.getKeys()
        #   in our Each Frame code (which runs between flips) is more reliable.
        #
        # KEY_CODES: edit here if your button box emits different key names.
        #   Scully lab convention: '7' = left index, '2' = right index.
        #   Common alternatives:
        #     Current Designs digit mode: '1'..'4' or '5'..'8'
        #     Button-box USB-HID letter mode: 'a', 'b', 'c', 'd'
        #   Only entries for 'left_index' and 'right_index' are required for
        #   this task. Extra entries (middle, ring, etc.) are logged as
        #   "wrong_button" if pressed in the response window.
        # ======================================================================

        kb = keyboard.Keyboard()
        kb.clearEvents()

        KEY_CODES = {
            '7': 'left_index',
            '2': 'right_index',
        }
        EXIT_KEY = 'escape'

        # Per-trial event buffer (reset at the start of each response window)
        trial_events = []
    CodeComponent cueSetup
      Code Type = Py
      Begin Experiment:
        # ======================================================================
        # cueSetup  |  "Before Experiment" tab  |  routine: instruct
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: once, after the experiment window opens.
        #
        # WHAT IT DOES: builds the four cue-arrow TextStims used every trial
        #               (two '<' arrows for left trials, two '>' arrows for
        #               right trials). We make them ONCE here and reuse them;
        #               creating TextStims is slow, so doing it per-trial would
        #               introduce timing hiccups.
        #
        # WHY two TextStims per side (rather than one with text '<   <'):
        #   the trigger pixel is driven by a single pixel in the top-left
        #   corner, and we want the fixation cross at the exact centre. Using
        #   two independent arrows positioned at +/- CUE_ARROW_OFFSET_PX pixels
        #   leaves the dead-centre pixel free for the ShapeStim fixation cross
        #   drawn by the fixation PolygonComponent in this routine. A single
        #   TextStim with embedded spaces would push the arrows a bit off-grid.
        #
        # WHERE THE NAMES COME FROM:
        #   visual, win               - Builder (PsychoPy visual module, main window)
        #   CUE_ARROW_OFFSET_PX       - trialTimingSetup Before Experiment tab
        # ======================================================================

        cue_left_arrows = [
            visual.TextStim(win, text='<', color='white', height=60,
                            pos=(-CUE_ARROW_OFFSET_PX, 0), autoLog=False),
            visual.TextStim(win, text='<', color='white', height=60,
                            pos=(+CUE_ARROW_OFFSET_PX, 0), autoLog=False),
        ]
        cue_right_arrows = [
            visual.TextStim(win, text='>', color='white', height=60,
                            pos=(-CUE_ARROW_OFFSET_PX, 0), autoLog=False),
            visual.TextStim(win, text='>', color='white', height=60,
                            pos=(+CUE_ARROW_OFFSET_PX, 0), autoLog=False),
        ]
    CodeComponent breakSetup
      Code Type = Py
      Begin Experiment:
        # ======================================================================
        # breakSetup  |  "Begin Experiment" tab  |  routine: instruct
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: once, when the experiment starts.
        #
        # WHAT IT DOES: sets the minimum between-block rest duration. The
        #               break screen does not let the experimenter press SPACE
        #               until this many seconds have passed, so the subject
        #               gets a real break even if the experimenter is
        #               impatient.
        # ======================================================================
        INTERBLOCK_MIN_REST = 15.0   # seconds
    CodeComponent trialTimingSetup
      Code Type = Py
      Before Experiment:
        # ======================================================================
        # trialTimingSetup  |  "Before Experiment" tab  |  routine: instruct
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: once, when the script starts, before the window opens.
        #
        # WHAT IT DOES: defines all the trial-timing constants. Edit the
        #               numbers here (and nowhere else) to change the paradigm.
        #               They are referenced from several routines' Stop fields
        #               and from scoring code in response_window.
        #
        # EDITABLE PHASE DURATIONS (seconds):
        # ======================================================================

        FIXATION_DURATION   = 1.500      # fixation cross alone (no cue, no tone)
        CUE_DURATION        = 0.500      # arrows flank the fixation cross
        RESPONSE_WINDOW     = 1.000      # fixation-only phase after the last tone
        FEEDBACK_DURATION   = 0.400      # MISS or WRONG BUTTON (error trials only)
        BLINK_DURATION      = 0.500      # subject may blink while 'BLINK' is up

        # Tone itself. Needed below to compute the scoring-window upper bound.
        TONE_DURATION       = 0.400      # same for standards and the deviant

        # Response-scoring window, in seconds AFTER the deviant tone onset.
        # Presses outside this window are logged but not scored as a response.
        #   RESP_WIN_MIN: 150 ms floor rejects anticipatory presses that
        #     couldn't physically be in reaction to hearing the deviant.
        #   RESP_WIN_MAX: deviant duration + response-window phase, matching
        #     the FieldTrip reference task.
        RESP_WIN_MIN        = 0.150
        RESP_WIN_MAX        = TONE_DURATION + RESPONSE_WINDOW   # 1.400 s

        # Cue arrow geometry (pixels from fixation to each arrow's centre).
        CUE_ARROW_OFFSET_PX = 50
    CodeComponent logFilesSetup
      Code Type = Py
      Before Experiment:
        # ======================================================================
        # logFilesSetup  |  "Before Experiment" tab  |  routine: instruct
        # ----------------------------------------------------------------------
        # Module-level imports. Same reason as sequenceGen's Before Experiment:
        # imports inside run() would shadow module-level names and crash
        # Builder's own code earlier in run().
        # ======================================================================
        import csv as _csv
        import atexit as _atexit_log
      Begin Experiment:
        # ======================================================================
        # logFilesSetup  |  "Begin Experiment" tab  |  routine: instruct
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: once, when the experiment starts.
        #
        # WHAT IT DOES: opens three TSV files (one row per trial, one row per
        #               tone, one row per button press). Each row is flushed
        #               to disk after it's written, so a crash doesn't lose
        #               completed trials.
        #
        # COLUMN NAMING CONVENTION (clock provenance):
        #   *_pp        PsychoPy default clock (behavioural RT reference)
        #   *_vp        VPIXX DATAPixx3 hardware clock (MEG alignment reference)
        #   *_vp_est    estimated VPIXX time (derived from a PsychoPy-clock
        #               event via the PP<->VP correspondence sampled at the
        #               nearest flip). Accurate to ~one video frame.
        # ======================================================================

        _log_base = thisExp.dataFileName

        trials_log_path   = _log_base + '_trials_log.tsv'
        tones_log_path    = _log_base + '_tones_log.tsv'
        presses_log_path  = _log_base + '_presses_log.tsv'

        trials_log_columns = [
            'overall_trial', 'block', 'trial_in_block', 'is_training',
            'cue_hand', 'expected_button', 'n_standards',
            'fixation_onset_pp', 'fixation_onset_vp',
            'cue_onset_pp',      'cue_onset_vp',
            'first_tone_onset_pp', 'first_tone_onset_vp',
            'deviant_onset_pp',    'deviant_onset_vp',
            'response_button', 'response_key_name',
            'response_time_pp', 'response_time_vp_est',
            'rt_pp', 'rt_vp_est',
            'outcome', 'feedback_shown',
            'blink_onset_pp', 'blink_onset_vp',
            'dummy_vpixx',
        ]

        tones_log_columns = [
            'overall_trial', 'block', 'trial_in_block', 'tone_index',
            'kind', 'frequency_hz', 'onset_pp', 'onset_vp',
        ]

        presses_log_columns = [
            'overall_trial', 'block', 'label', 'key_name',
            'time_pp', 'time_vp_est',
        ]

        _trials_log_fh  = open(trials_log_path,  'w', newline='')
        _tones_log_fh   = open(tones_log_path,   'w', newline='')
        _presses_log_fh = open(presses_log_path, 'w', newline='')

        trials_log_writer  = _csv.DictWriter(_trials_log_fh,  fieldnames=trials_log_columns,
                                             delimiter='\t')
        tones_log_writer   = _csv.DictWriter(_tones_log_fh,   fieldnames=tones_log_columns,
                                             delimiter='\t')
        presses_log_writer = _csv.DictWriter(_presses_log_fh, fieldnames=presses_log_columns,
                                             delimiter='\t')

        trials_log_writer.writeheader()
        tones_log_writer.writeheader()
        presses_log_writer.writeheader()

        for _fh in (_trials_log_fh, _tones_log_fh, _presses_log_fh):
            _fh.flush()

        # In-memory per-trial collectors. tone and response routines append
        # here; trialLog writes them out at End Routine.
        tones_log_rows   = []
        presses_log_rows = []

        # Default values used by trialLog's End Routine
        block_label      = 'training'   # overwritten in the main block loop
        trial_in_block   = 0            # overwritten in each loop

        # Close the files when the program ends.
        # (atexit was imported at module level by logFilesSetup's Before Experiment.)


        def _close_logs():
            for _fh in (_trials_log_fh, _tones_log_fh, _presses_log_fh):
                try:
                    _fh.close()
                except Exception:
                    pass


        _atexit_log.register(_close_logs)
    CodeComponent taskStartMsg
      Code Type = Py
      End Routine:
        # ======================================================================
        # taskStartMsg  |  "End Routine" tab  |  routine: instruct
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: once, when the experimenter presses SPACE to leave the
        #               instructions screen and begin training.
        #
        # WHAT IT DOES: writes the message "TASK_START" into the eye-tracking
        #               data file (EDF). This acts as a clear marker in the EDF
        #               so later analysis can trim to the actual task period
        #               and ignore EyeLink calibration / drift-check epochs.
        #
        # WHERE pylink COMES FROM:
        #   The EyeLink Initialize component in the eyelinkSetup routine loads
        #   the pylink library. pylink.getEYELINK() returns the shared tracker
        #   object, available from any routine.
        # ======================================================================
        el_tracker = pylink.getEYELINK()
        el_tracker.sendMessage('TASK_START')
    TextComponent taskInstructions
      letterHeight = 36
      startVal [time (s)] = 0
      units = pix
      wrapWidth = 1500
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      text:
        You will hear a series of tones.

        On each trial an arrow cue appears:
            <  <   = LEFT hand          >  >   = RIGHT hand

        After the cue you will hear several identical tones,
        followed by ONE different (higher) tone.

        As soon as you hear the DIFFERENT tone,
        press the INDEX FINGER button on the cued hand
        as quickly as possible.

        If you miss or press the wrong button, you'll see feedback.

        When 'BLINK' appears, you have half a second to blink.
        Otherwise please try not to blink and hold your gaze on the cross.

        Experimenter: press SPACE to start the training block.
    KeyboardComponent ready
      allowedKeys = "space"
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine eyelinkDriftCheck
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    DriftCheck eyelinkDriftCheck_component plugin="psychopy-eyelink"
      backgroundColor = win.color
      driftCheckFilenames = 'qbeep.wav','type.wav','error.wav'
      driftCheckSounds = defaults
      foregroundColor = (1,1,1)
      screenUnitType = pix
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      targetFilename = images/fixTarget.bmp
      targetPosition = [0,0]
      targetSize = 24
      targetType = picture
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  Routine triggersOn
    RoutineSettingsComponent triggersOn
      desc = Switches VPixx Pixel Mode B on after the drift check
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    CodeComponent pixelModeOn
      Code Type = Py
      Begin Routine:
        # ======================================================================
        # pixelModeOn  |  "Begin Routine" tab  |  routine: triggersOn
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: once, right after the initial drift check and before
        #               the first training trial.
        #
        # WHAT IT DOES: switches the DATAPixx3 into Pixel Mode B. From here
        #               on, the top-left pixel's BLUE value is read on every
        #               screen refresh and output on the 8 MEG trigger lines
        #               (1, 2, 4, 8, 16, 32, 64, 128).
        #
        # WHY NOT ENABLE PIXEL MODE FROM THE START:
        #   The EyeLink calibration and drift-check screens draw their own
        #   content (including whatever colour happens to be in the top-left
        #   pixel) and we don't want their random pixel colours reaching the
        #   MEG as junk triggers. vpixxSetup opens the device with Pixel Mode
        #   OFF; this routine turns it on only after calibration is done.
        #   pixelModeOff (in the thanks routine) turns it back off before the
        #   EyeLink plugin's file-copy screens show.
        #
        # WHERE THE NAMES COME FROM:
        #   dp, DUMMY_VPIXX           - vpixxSetup (instruct routine)
        #   setTriggerPixel, TRIG_OFF - triggerSetup (instruct routine)
        #   logging                   - PsychoPy (available everywhere)
        # ======================================================================
        setTriggerPixel(TRIG_OFF)            # start with the pixel black

        if not DUMMY_VPIXX:
            dp.DPxEnableDoutPixelModeB()
            dp.DPxWriteRegCache()            # push the enable to the device
            logging.exp('VPixx Pixel Mode B ON')
  Routine trialSetup
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    CodeComponent trialSetupCode
      Code Type = Py
      Begin Routine:
        # ======================================================================
        # trialSetupCode  |  "Begin Routine" tab  |  routine: trialSetup
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: at the start of every trial, as the first thing in the
        #               trialSetup routine. Builder has already loaded this
        #               trial's row from the conditions CSV and set each column
        #               as a local variable (cue_hand, expected_button,
        #               n_standards, isis_json, is_training).
        #
        # WHAT IT DOES: five preparation steps per trial.
        #
        #   1. Parse the per-tone ISI list from JSON (or accept a list if
        #      Builder already parsed it).
        #   2. Set tone_loop_reps so the inner tone_loop iterates once per
        #      standard tone PLUS once for the deviant at the end.
        #   3. Convert is_training (which may arrive as 'True'/'False' string)
        #      into a real Python bool for later tests.
        #   4. Clear the per-trial VPIXX-timestamp dict and reset all
        #      trial-level variables that trialLog will later write.
        #   5. Bump the running overall_trial counter.
        #
        # WHERE THE NAMES COME FROM:
        #   cue_hand, expected_button,
        #   n_standards, isis_json,
        #   is_training          - this trial's row of the conditions CSV
        #                           (loaded by Builder before this routine)
        #   vpixxTimes           - triggerSetup Begin Experiment (shared dict)
        #   overall_trial        - sequenceGen Begin Routine (initialised 0)
        #   json                 - sequenceGen Before Experiment (module import)
        # ======================================================================

        # ---- 1. Parse the per-tone ISI list ---------------------------------
        # isis_json is the per-trial ISI list, one gap after each standard
        # (the deviant has no gap after it, it's the last tone). The CSV
        # writes it as a JSON string ("[0.75, 0.82, ...]"), but Builder's
        # conditions loader may auto-parse that cell into a Python list.
        # Handle both forms.
        if isinstance(isis_json, str):
            isi_list = json.loads(isis_json)
        else:
            isi_list = list(isis_json)

        # ---- 2. Set tone_loop iteration count -------------------------------
        # tone_loop reads this each time it starts (before its first iteration)
        # because its nReps field is $tone_loop_reps. n_standards is the number
        # of standards BEFORE the deviant; +1 adds the deviant itself.
        tone_loop_reps = int(n_standards) + 1

        # ---- 3. Training vs main --------------------------------------------
        # `is_training` comes in as a column of the conditions CSV: True in
        # the training CSV, False in the three block CSVs. Builder loads it
        # as a local variable for each trial, but we must NOT reassign the
        # bare name `is_training` here -- Python's compiler would then mark
        # `is_training` as a local of Builder's run() function, and the
        # right-hand-side read on the self-assign line would raise
        # UnboundLocalError (the Builder injection happens via a different
        # mechanism than the compiler can see).
        #
        # Instead compute a differently-named bool. All later references in
        # the trial routines (tonePresent, trialLogWrite, blockControl) use
        # this new name.
        is_training_bool = str(is_training).lower() == 'true'

        # ---- 4. Fresh per-trial state ---------------------------------------
        vpixxTimes.clear()
        tone_index_in_trial = 0          # 0-indexed, bumped before each tone
        first_tone_onset_pp = None
        first_tone_onset_vp = None
        deviant_onset_pp    = None
        deviant_onset_vp    = None

        # Response fields default to 'no press'
        response_button    = ''
        response_key_name  = ''
        response_time_pp   = None
        response_time_vp_est = None
        rt_pp              = float('nan')
        rt_vp_est          = float('nan')
        outcome            = 'miss'
        feedback_shown     = False

        # Running trial counter (incremented in sequenceGen; here we bump it)
        overall_trial += 1
    CodeComponent blockControl
      Code Type = Py
      Begin Routine:
        # ======================================================================
        # blockControl  |  "Begin Routine" tab  |  routine: trialSetup
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: at the start of every trial (training or main),
        #               AFTER trialSetupCode (which sets is_training_bool).
        #
        # WHAT IT DOES: computes two label fields written to the trial log:
        #               - block_label: 'training' or 'block_1' / 'block_2' /
        #                 'block_3'. Lets you filter the data file later.
        #               - trial_in_block: 1-based trial number within this
        #                 block (resets at the start of each block).
        #
        # WHERE THE NAMES COME FROM:
        #   is_training_bool                  - trialSetupCode (this routine)
        #   training_trials.thisN             - Builder: 0-based index of the
        #                                        current training loop iteration
        #   block_loop.thisN, block_trials.thisN
        #                                     - Builder: 0-based indices of the
        #                                        main block loop and its trials
        # ======================================================================
        if is_training_bool:
            block_label    = 'training'
            trial_in_block = training_trials.thisN + 1
        else:
            block_label    = 'block_%d' % (block_loop.thisN + 1)
            trial_in_block = block_trials.thisN + 1
  Routine fixation
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    CodeComponent fixationTriggerClear
      Code Type = Py
      Begin Routine:
        # Clear any lingering trigger pixel.
        setTriggerPixel(TRIG_OFF)
    PolygonComponent fixation_cross
      fillColor = white
      lineWidth = 2
      shape = cross
      size = (32, 32)
      startVal [time (s)] = 0
      stopVal [duration (s)] = FIXATION_DURATION
      units = pix
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  Routine cue
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    CodeComponent cuePresent
      Code Type = Py
      Begin Routine:
        # ======================================================================
        # cuePresent  |  "Begin Routine" tab  |  routine: cue
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: once at the start of every trial's cue phase (500 ms).
        #
        # WHAT IT DOES:
        #   1. picks which arrow pair (left or right) to draw this trial
        #   2. sends the appropriate MEG trigger (8 for left, 16 for right) on
        #      the next screen refresh via sendTrigger()
        #
        # The fixation cross stays on throughout the cue phase; it is drawn by
        # the cue_fixation_cross PolygonComponent in this routine, not here.
        # The arrows are drawn by this component's Each Frame code (below).
        #
        # WHERE THE NAMES COME FROM:
        #   cue_hand               - this trial's row of the conditions CSV
        #                            ('left' or 'right')
        #   cue_left_arrows,
        #   cue_right_arrows       - cueSetup Before Experiment (instruct routine)
        #   TRIG_CUE_LEFT,
        #   TRIG_CUE_RIGHT         - triggerSetup Before Experiment (instruct)
        #   sendTrigger            - triggerSetup Begin Experiment (instruct)
        # ======================================================================

        if cue_hand == 'left':
            cue_arrows_to_draw = cue_left_arrows
            sendTrigger(TRIG_CUE_LEFT, 'cue')
        else:
            cue_arrows_to_draw = cue_right_arrows
            sendTrigger(TRIG_CUE_RIGHT, 'cue')
      Each Frame:
        # ======================================================================
        # cuePresent  |  "Each Frame" tab  |  routine: cue
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: every screen refresh during the cue phase (~60 frames
        #               at 120 Hz over 500 ms).
        #
        # WHAT IT DOES:
        #   1. draws the two cue arrows on top of the fixation cross
        #   2. after the first frame, blanks the trigger pixel so the cue
        #      trigger pulse is exactly ONE frame long (~8.3 ms at 120 Hz)
        #
        # WHERE THE NAMES COME FROM:
        #   cue_arrows_to_draw   - Begin Routine tab, this component
        #   frameN               - Builder: current frame index in this routine
        #                           (0 on first frame, 1 on second, ...)
        #   setTriggerPixel,
        #   TRIG_OFF             - triggerSetup (instruct routine)
        # ======================================================================

        # Draw both arrows this frame. The fixation PolygonComponent in this
        # routine draws the cross; both are composed into one flip.
        for a in cue_arrows_to_draw:
            a.draw()

        # Trigger pulse is 1 frame. On frame 0 the pixel is coloured (by
        # sendTrigger in Begin Routine); from frame 1 onward it goes black.
        if frameN >= 1:
            setTriggerPixel(TRIG_OFF)
      End Routine:
        # ======================================================================
        # cuePresent  |  "End Routine" tab  |  routine: cue
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: once at the end of the cue phase (500 ms after it began).
        #
        # WHAT IT DOES: records the PsychoPy-clock time when the cue first
        #               appeared on screen. trialLog writes this to the trial
        #               CSV as `cue_onset_pp`.
        #
        # WHERE THE NAMES COME FROM:
        #   cue.tStartRefresh - Builder: the screen-refresh time at which this
        #                       routine's first frame was displayed. Builder
        #                       sets this automatically for every routine.
        # ======================================================================
        cue_onset_pp = cue.tStartRefresh
    PolygonComponent cue_fixation_cross
      fillColor = white
      lineWidth = 2
      shape = cross
      size = (32, 32)
      startVal [time (s)] = 0
      stopVal [duration (s)] = CUE_DURATION
      units = pix
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  Routine tone
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    CodeComponent tonePresent
      Code Type = Py
      Begin Routine:
        # ======================================================================
        # tonePresent  |  "Begin Routine" tab  |  routine: tone
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: once at the start of each tone (standard or deviant),
        #               inside tone_loop. The tone_loop iterates
        #               n_standards + 1 times per trial (one per standard tone
        #               plus one for the deviant at the end).
        #
        # WHAT IT DOES: three preparation steps BEFORE the first screen flip:
        #   1. Figures out which tone this is (standard vs deviant)
        #   2. Loads the right audio schedule onto the DATAPixx3 (not started
        #      yet -- the actual "start" command goes out in Each Frame, timed
        #      to the vsync so audio and trigger line up exactly)
        #   3. Primes the trigger pixel colour for this tone (1 for standard,
        #      2 for deviant) so that colour is driven out on DOUT at the next
        #      vsync; also records the DATAPixx3 clock time at that same vsync
        #      via win.callOnFlip
        #
        # TRIAL-STRUCTURE REMINDER:
        #   This routine runs ONCE per tone (per iteration of tone_loop). The
        #   full trial plays n_standards + 1 tones, each one playing through
        #   this routine. The LAST iteration is the deviant.
        #
        # WHERE THE NAMES COME FROM:
        #   is_training_bool                      - trialSetupCode (trialSetup)
        #   tone_loop_training / tone_loop_main   - Builder: there are two tone
        #     loops in the Flow (one inside the training loop, one inside the
        #     main block loop) with different names, so we pick whichever is
        #     actually iterating this trial by checking is_training_bool.
        #     Within either, .thisN is the 0-based iteration index.
        #   tone_loop_reps                        - trialSetupCode (n_standards + 1)
        #   prep_tone_schedule, standardSound,
        #   deviantSound                          - toneSetup (instruct routine)
        #   dp, DUMMY_VPIXX                       - vpixxSetup (instruct routine)
        #   sendTrigger, TRIG_STANDARD,
        #   TRIG_DEVIANT                          - triggerSetup (instruct routine)
        # ======================================================================

        # ---- 1. Which tone is this? -----------------------------------------
        _active_tone_loop = tone_loop_training if is_training_bool else tone_loop_main
        tone_index_in_trial = _active_tone_loop.thisN   # 0, 1, 2, ..., n_standards
        is_deviant = (tone_index_in_trial == tone_loop_reps - 1)
        kind = 'deviant' if is_deviant else 'standard'

        # ---- 2. Load the audio schedule onto the DATAPixx3 ------------------
        # prep_tone_schedule() tells the DATAPixx3 "when I say start, play
        # this tone from this memory address, in mono, at this sample rate."
        # The config is pushed to the device but the start bit is NOT yet set
        # -- that happens in Each Frame, right before the first flip, so the
        # tone starts on the SAME vsync as the trigger pixel goes high.
        prep_tone_schedule(kind)

        # ---- 3. Set the trigger pixel and queue a clock sample --------------
        # sendTrigger() changes the trigger pixel colour. On the next screen
        # refresh VPIXX reads that pixel and outputs the trigger number on the
        # MEG trigger lines. It also uses win.callOnFlip() to record the
        # DATAPixx3 clock time at that same refresh, stored in
        # vpixxTimes['tone_<n>'] -- End Routine copies it to the tones log.
        if is_deviant:
            sendTrigger(TRIG_DEVIANT, 'tone_%d' % (tone_index_in_trial + 1))
        else:
            sendTrigger(TRIG_STANDARD, 'tone_%d' % (tone_index_in_trial + 1))

        # ---- Dummy-mode fallback audio --------------------------------------
        # No DATAPixx3? Play the tone through PsychoPy's sound system instead.
        # Timing is loose (OS audio latency) but good enough for development.
        if DUMMY_VPIXX:
            _dummy_stim = deviantSound if is_deviant else standardSound
            _dummy_stim.stop()                      # in case still playing
            win.callOnFlip(_dummy_stim.play)        # play at next flip

        # Flag so Each Frame fires the DATAPixx3 "start" command exactly once
        # (on frame 0 only, not every subsequent frame).
        tone_audio_started = False

        # Filled in End Routine from tone.tStartRefresh.
        tone_onset_pp_this = None
      Each Frame:
        # ======================================================================
        # tonePresent  |  "Each Frame" tab  |  routine: tone
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: every screen refresh during this tone's routine (~48
        #               frames at 120 Hz for a 400 ms tone + ISI).
        #
        # WHAT IT DOES: two things, each on a specific frame.
        #
        #   On frame 0 (THIS routine's first frame, before the first flip):
        #     Arms the DATAPixx3 to start audio playback at that flip. The two
        #     calls below MUST be the last VPIXX commands before win.flip() --
        #     anything that calls DPxUpdateRegCache() or DPxWriteRegCache()
        #     between here and the flip would wipe the pending "start" bit.
        #     That is why recordVpixxTime (which calls DPxUpdateRegCache) runs
        #     AFTER the flip via win.callOnFlip, not before.
        #
        #   On frame 1 and later:
        #     Blanks the trigger pixel so the MEG trigger pulse is exactly one
        #     frame long (~8.3 ms at 120 Hz, which is ~10 samples at a 1200 Hz
        #     MEG sample rate -- plenty for a stable edge).
        #
        # WHERE THE NAMES COME FROM:
        #   tone_audio_started, is_deviant   - Begin Routine (this component)
        #   frameN                           - Builder: frame index in routine
        #   dp, DUMMY_VPIXX                  - vpixxSetup (instruct routine)
        #   setTriggerPixel, TRIG_OFF        - triggerSetup (instruct routine)
        # ======================================================================

        if not tone_audio_started and frameN == 0:
            if not DUMMY_VPIXX:
                # These two must be the LAST VPIXX calls before the next flip.
                dp.DPxStartAudSched()                 # arm audio start locally
                dp.DPxWriteRegCacheAfterVideoSync()   # push to device at next vsync
            tone_audio_started = True

        # One-frame trigger pulse: blank the pixel from frame 1 onward.
        if frameN >= 1:
            setTriggerPixel(TRIG_OFF)
      End Routine:
        # ======================================================================
        # tonePresent  |  "End Routine" tab  |  routine: tone
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: once at the end of each tone's routine (tone +
        #               trailing ISI, except the deviant which has no ISI).
        #
        # WHAT IT DOES:
        #   1. Captures this tone's PsychoPy-clock onset (set by Builder as
        #      tone.tStartRefresh) and VPIXX-clock onset (sampled by
        #      recordVpixxTime at the flip, stored in vpixxTimes).
        #   2. Saves the FIRST tone's and the DEVIANT tone's timestamps for
        #      the trial log (fixed slots in the trial row).
        #   3. Appends one row to the per-tone log file so every tone has its
        #      own row with onset times (useful for MMN/P3 analyses).
        #
        # WHERE THE NAMES COME FROM:
        #   tone.tStartRefresh                  - Builder: when this routine's
        #                                          first frame appeared on screen
        #   vpixxTimes                          - triggerSetup Begin Experiment
        #                                          (dict filled by recordVpixxTime)
        #   tone_index_in_trial, is_deviant,
        #   kind                                - Begin Routine (this component)
        #   deviantFreqHz, standardFreqHz       - toneSetup Before Experiment
        #   first_tone_onset_pp/vp,
        #   deviant_onset_pp/vp                 - trialSetupCode (initialised None)
        #   tones_log_rows                      - logFilesSetup Begin Experiment
        #   overall_trial, block_label,
        #   trial_in_block                      - trialSetupCode / blockControl
        # ======================================================================

        tone_onset_pp_this = tone.tStartRefresh
        tone_onset_vp_this = vpixxTimes.get('tone_%d' % (tone_index_in_trial + 1))

        # Remember the FIRST tone's onset times (for the trial log)
        if tone_index_in_trial == 0:
            first_tone_onset_pp = tone_onset_pp_this
            first_tone_onset_vp = tone_onset_vp_this

        # Remember the DEVIANT tone's onset times (needed for response scoring
        # in response_window, and for the trial log)
        if is_deviant:
            deviant_onset_pp = tone_onset_pp_this
            deviant_onset_vp = tone_onset_vp_this

        # Append this tone's row to the per-tone log. Flushed to disk at the
        # end of the trial by trialLog.
        tones_log_rows.append({
            'overall_trial':  overall_trial,
            'block':          block_label,
            'trial_in_block': trial_in_block,
            'tone_index':     tone_index_in_trial + 1,   # 1-based for humans
            'kind':           kind,
            'frequency_hz':   deviantFreqHz if is_deviant else standardFreqHz,
            'onset_pp':       '%.6f' % tone_onset_pp_this,
            'onset_vp':       '' if tone_onset_vp_this is None else '%.6f' % tone_onset_vp_this,
        })
    PolygonComponent tone_fixation_cross
      fillColor = white
      lineWidth = 2
      shape = cross
      size = (32, 32)
      startVal [time (s)] = 0
      stopVal [duration (s)] = TONE_DURATION + (isi_list[tone_index_in_trial] if tone_index_in_trial < len(isi_list) else 0.0)
      units = pix
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  Routine response_window
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    CodeComponent responseClassify
      Code Type = Py
      Begin Routine:
        # ======================================================================
        # responseClassify  |  "Begin Routine" tab  |  routine: response_window
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: at the start of the 1 s response window after the
        #               deviant tone.
        #
        # WHAT IT DOES: resets the per-trial event buffer; drains any key
        #               events pressed BEFORE this routine opened (e.g., a fast
        #               correct press during the deviant tone itself); sets the
        #               scoring-window boundaries relative to deviant onset.
        #
        # IMPORTANT (matches Coder script): we do NOT call kb.clearEvents()
        # here. The valid scoring window starts 150 ms AFTER deviant onset,
        # which is still DURING the deviant tone (tone duration = 400 ms).
        # Presses made in that window must be preserved; wiping the buffer
        # would drop them and score them as miss. The scoring logic in End
        # Routine filters out presses outside the window, so any genuinely
        # too-early presses (from the fixation / cue / earlier tones) are
        # ignored there rather than here.
        # ======================================================================

        trial_events = []

        # Drain any key events already in kb's buffer (pressed during the
        # fixation, cue, or tone phases). These get added to trial_events with
        # their actual key-down times; scoring filters by window.
        _pre_window_events = kb.getKeys(keyList=list(KEY_CODES.keys()) + [EXIT_KEY],
                                         waitRelease=False)
        if not DUMMY_VPIXX:
            dp.DPxUpdateRegCache()
            _pre_vp = dp.DPxGetTime()
        else:
            _pre_vp = 0.0
        _pre_pp = core.getTime()
        for key in _pre_window_events:
            if key.name == EXIT_KEY:
                continueRoutine = False
                break
            label = KEY_CODES.get(key.name)
            if label is None:
                continue
            trial_events.append({
                'kind':        'press',
                'label':       label,
                'key_name':    key.name,
                'time_pp':     key.tDown,
                'time_vp_est': _pre_vp + (key.tDown - _pre_pp),
            })

        # Scoring window boundaries (PsychoPy clock, from the deviant onset).
        # Window spans 150 ms (anticipation floor) to deviant+1400 ms (deviant
        # duration + response phase). Matches the Coder script's values.
        if deviant_onset_pp is None:
            # Shouldn't happen but be safe
            resp_min_pp = float('inf')
            resp_max_pp = float('inf')
        else:
            resp_min_pp = deviant_onset_pp + RESP_WIN_MIN
            resp_max_pp = deviant_onset_pp + RESP_WIN_MAX
      Each Frame:
        # ======================================================================
        # responseClassify  |  "Each Frame" tab  |  routine: response_window
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: every screen refresh during the 1 s response window
        #               (~120 polls at 120 Hz).
        #
        # WHAT IT DOES:
        #   1. Keeps the trigger pixel black (nothing should be triggered here)
        #   2. Samples both clocks (PsychoPy + VPIXX) at this flip, so any key
        #      events captured on this frame can be tagged with an approximate
        #      VPIXX-clock timestamp (within one video frame of the real press)
        #   3. Drains new keyboard events into trial_events
        #   4. On ESC, ends the routine early (user abort)
        #
        # WHY THE VP TIMESTAMP IS "_vp_est" and not "_vp":
        #   VPIXX does NOT see the keyboard directly; the keyboard event lives
        #   purely in the OS HID pipeline. We can't ask VPIXX "when did this
        #   press happen" the way we can for a tone or trigger. So we estimate:
        #   at this frame's flip we know both frame_pp (PsychoPy time of the
        #   flip) and frame_vp (VPIXX time of the flip). For a key event with
        #   PsychoPy-time key.tDown, its VPIXX time is approximately:
        #       frame_vp + (key.tDown - frame_pp)
        #   Accurate to ~1 video frame (8.3 ms at 120 Hz). The definitive
        #   response time for MEG analysis should come from the button box's
        #   TTL output wired into the MEG amplifier trigger channel, not from
        #   this estimate.
        #
        # WHERE THE NAMES COME FROM:
        #   kb, KEY_CODES, EXIT_KEY, trial_events  - responseClassifySetup
        #                                             (instruct Begin Experiment)
        #   dp, DUMMY_VPIXX                         - vpixxSetup
        #   setTriggerPixel, TRIG_OFF               - triggerSetup
        #   core                                    - PsychoPy (always available)
        #   globalClock                             - Builder: experiment-wide clock
        #   frameN                                  - Builder: frame index
        # ======================================================================

        setTriggerPixel(TRIG_OFF)

        # Sample both clocks at this flip for PP<->VP conversion.
        if not DUMMY_VPIXX:
            dp.DPxUpdateRegCache()
            frame_vp = dp.DPxGetTime()
        else:
            frame_vp = 0.0
        frame_pp = globalClock.getTime() if 'globalClock' in dir() else core.getTime()

        # Drain any new key presses since the last poll.
        keyList = list(KEY_CODES.keys()) + [EXIT_KEY]
        new_keys = kb.getKeys(keyList=keyList, waitRelease=False)
        for key in new_keys:
            if key.name == EXIT_KEY:
                # User abort: end this routine now. (The outer flow may
                # continue; use Ctrl-C in the Runner for a hard quit.)
                continueRoutine = False
                break
            label = KEY_CODES.get(key.name)
            if label is None:
                continue   # key not in our mapping; ignore
            trial_events.append({
                'kind':        'press',
                'label':       label,
                'key_name':    key.name,
                'time_pp':     key.tDown,
                'time_vp_est': frame_vp + (key.tDown - frame_pp),
            })
      End Routine:
        # ======================================================================
        # responseClassify  |  "End Routine" tab  |  routine: response_window
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: once, when the 1 s response window ends.
        #
        # WHAT IT DOES:
        #   1. Classifies the trial outcome. Finds the FIRST press whose
        #      PsychoPy-clock time falls in the scoring window
        #      [deviant + 150 ms, deviant + 1400 ms]. If that press was on the
        #      cued finger -> 'correct'; different finger -> 'wrong_button';
        #      no in-window press -> 'miss' (initialized that way in
        #      trialSetupCode).
        #   2. Also computes RT in both clocks:
        #        rt_pp    = response_time_pp - deviant_onset_pp
        #        rt_vp_est = response_time_vp_est - deviant_onset_vp
        #      (rt_vp_est is approximate; see "_vp_est" rationale in Each Frame)
        #   3. Logs EVERY detected key event (not just the scored one) to the
        #      presses TSV so you can see out-of-window presses later.
        #
        # WHERE THE NAMES COME FROM:
        #   trial_events                        - Each Frame tab (this component)
        #                                          and Begin Routine pre-drain
        #   resp_min_pp, resp_max_pp            - Begin Routine (this component)
        #   deviant_onset_pp, deviant_onset_vp  - tonePresent End Routine
        #   cue_hand                            - conditions CSV
        #   response_button, response_key_name,
        #   response_time_pp, response_time_vp_est,
        #   rt_pp, rt_vp_est, outcome           - trialSetupCode defaults
        #   presses_log_rows                    - logFilesSetup Begin Experiment
        # ======================================================================

        # ---- 1 & 2. Classify + compute RT (first in-window press only) ------
        for ev in trial_events:
            if resp_min_pp <= ev['time_pp'] <= resp_max_pp:
                response_button      = ev['label']
                response_key_name    = ev['key_name']
                response_time_pp     = ev['time_pp']
                response_time_vp_est = ev['time_vp_est']
                rt_pp = response_time_pp - deviant_onset_pp
                if deviant_onset_vp is not None and ev['time_vp_est'] is not None:
                    rt_vp_est = response_time_vp_est - deviant_onset_vp
                expected_finger = {'left': 'left_index', 'right': 'right_index'}[cue_hand]
                outcome = 'correct' if response_button == expected_finger else 'wrong_button'
                break   # first in-window press defines the response

        # ---- 3. Log every detected event (in or out of window) --------------
        for ev in trial_events:
            presses_log_rows.append({
                'overall_trial': overall_trial,
                'block':         block_label,
                'label':         ev['label'],
                'key_name':      ev['key_name'],
                'time_pp':       '%.6f' % ev['time_pp'],
                'time_vp_est':   '' if ev['time_vp_est'] is None
                                    else '%.6f' % ev['time_vp_est'],
            })
    PolygonComponent response_fixation_cross
      fillColor = white
      lineWidth = 2
      shape = cross
      size = (32, 32)
      startVal [time (s)] = 0
      stopVal [duration (s)] = RESPONSE_WINDOW
      units = pix
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  Routine feedback
    RoutineSettingsComponent feedback
      skipIf = outcome == 'correct'
      stopVal [duration (s)] = FEEDBACK_DURATION
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    CodeComponent feedbackSelect
      Code Type = Py
      Begin Routine:
        # ======================================================================
        # feedbackSelect  |  "Begin Routine" tab  |  routine: feedback
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: once at the start of the feedback phase, but only on
        #               error trials. The ROUTINE's skipIf field is
        #               $outcome == 'correct', so Builder skips the entire
        #               feedback routine on correct trials -- this code never
        #               runs for them, and the trial goes straight from the
        #               response window to BLINK.
        #
        # WHAT IT DOES:
        #   1. Picks the feedback TEXT and FONT HEIGHT based on outcome:
        #        'miss'         -> 'MISS'         (height 80 px)
        #        'wrong_button' -> 'WRONG BUTTON' (height 60 px)
        #      These heights match the Coder script's feedback_miss / wrong
        #      stims so the Builder version looks identical.
        #   2. Sends the FEEDBACK trigger (32) on the next flip
        #   3. Sets feedback_shown=True so trialLog records that feedback was
        #      displayed on this trial (useful for later behavioural checks)
        #
        # The feedback_text TextComponent in this routine actually draws the
        # text, using $feedback_text and $feedback_height (both "set every
        # repeat") so each trial gets the right message. Letting Builder's
        # own render loop handle the drawing is more reliable than drawing
        # imperatively from Each Frame code.
        #
        # WHERE THE NAMES COME FROM:
        #   outcome                  - responseClassify End Routine
        #   sendTrigger, TRIG_FEEDBACK - triggerSetup (instruct routine)
        #   feedback_shown           - trialSetupCode (initialised False)
        # ======================================================================

        if outcome == 'miss':
            feedback_text   = 'MISS'
            feedback_height = 80
        else:  # outcome == 'wrong_button' (correct is skipped before we get here)
            feedback_text   = 'WRONG BUTTON'
            feedback_height = 60

        sendTrigger(TRIG_FEEDBACK, 'feedback')
        feedback_shown = True
      Each Frame:
        # ======================================================================
        # feedbackSelect  |  "Each Frame" tab  |  routine: feedback
        # ----------------------------------------------------------------------
        # Only runs on error trials (routine is skipped on correct). On the
        # frame after the trigger pixel went high, blank it so the FEEDBACK
        # trigger pulse is one frame long.
        # ======================================================================
        if frameN >= 1:
            setTriggerPixel(TRIG_OFF)
    TextComponent feedback_text_stim
      color = red
      letterHeight [set every repeat] = feedback_height
      startVal [time (s)] = 0
      stopVal [duration (s)] = FEEDBACK_DURATION
      text [set every repeat] = $feedback_text
      units = pix
      wrapWidth = 1500
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  Routine blink
    RoutineSettingsComponent blink
      stopVal [duration (s)] = BLINK_DURATION
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    CodeComponent blinkPresent
      Code Type = Py
      Begin Routine:
        # ======================================================================
        # blinkPresent  |  "Begin Routine" tab  |  routine: blink
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: once at the start of each trial's BLINK phase (500 ms).
        #               This phase is a controlled window for the subject to
        #               blink without contaminating neural data from the
        #               trial's main events.
        #
        # WHAT IT DOES: sends the BLINK trigger (4) on the next flip so the
        #               MEG recording has a clear marker of when the subject
        #               was allowed to blink. The TextComponent in this routine
        #               draws the word "BLINK" so the subject knows it's OK.
        #
        # WHERE THE NAMES COME FROM:
        #   sendTrigger, TRIG_BLINK  - triggerSetup (instruct routine)
        # ======================================================================
        sendTrigger(TRIG_BLINK, 'blink')
      Each Frame:
        # ======================================================================
        # blinkPresent  |  "Each Frame" tab  |  routine: blink
        # ----------------------------------------------------------------------
        # One-frame trigger pulse: blank the pixel from frame 1 onward.
        # ======================================================================
        if frameN >= 1:
            setTriggerPixel(TRIG_OFF)
      End Routine:
        # ======================================================================
        # blinkPresent  |  "End Routine" tab  |  routine: blink
        # ----------------------------------------------------------------------
        # Save BLINK onset times for the trial log.
        #
        # WHERE THE NAMES COME FROM:
        #   blink.tStartRefresh - Builder: PP time of this routine's first flip
        #   vpixxTimes          - triggerSetup Begin Experiment (dict filled by
        #                          recordVpixxTime, called via win.callOnFlip)
        # ======================================================================
        blink_onset_pp = blink.tStartRefresh
        blink_onset_vp = vpixxTimes.get('blink')
    TextComponent blink_text_stim
      letterHeight = 60
      startVal [time (s)] = 0
      stopVal [duration (s)] = BLINK_DURATION
      text = BLINK
      units = pix
      wrapWidth = 1500
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  Routine trialLog
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    CodeComponent trialLogWrite
      Code Type = Py
      End Routine:
        # ======================================================================
        # trialLogWrite  |  "End Routine" tab  |  routine: trialLog
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: at the end of every trial, after all other per-trial
        #               routines have finished.
        #
        # WHAT IT DOES: writes exactly one row to each of the three TSV files:
        #               trial row (behavioural outcome + all timestamps),
        #               per-tone rows (one per tone played this trial), and
        #               per-press rows (one per detected keyboard event).
        #               Flushes everything to disk so a mid-session crash
        #               doesn't lose completed trials.
        #
        # TWO FORMATTING HELPERS (defined fresh here each trial):
        #   _fmt_pp(val) - format a PsychoPy-clock value, or '' if None
        #   _fmt_vp(val) - format a VPIXX-clock value, '' if None OR if we're
        #                   in dummy mode (vpixxTimes always returns None then)
        # ======================================================================


        def _fmt_pp(val, p=6):
            return '' if val is None else ('%.*f' % (p, val))


        def _fmt_vp(val, p=6):
            # Blank in dummy mode (vpixxTimes stores None then anyway, but we
            # also want a visually clean "this was a dummy run" indicator).
            if DUMMY_VPIXX or val is None:
                return ''
            return '%.*f' % (p, val)


        _fixation_pp = fixation.tStartRefresh if hasattr(fixation, 'tStartRefresh') else None
        _fixation_vp = vpixxTimes.get('fixation')

        trials_log_writer.writerow({
            'overall_trial':        overall_trial,
            'block':                block_label,
            'trial_in_block':       trial_in_block,
            'is_training':          is_training_bool,
            'cue_hand':             cue_hand,
            'expected_button':      expected_button,
            'n_standards':          n_standards,
            'fixation_onset_pp':    _fmt_pp(_fixation_pp),
            'fixation_onset_vp':    _fmt_vp(_fixation_vp),
            'cue_onset_pp':         _fmt_pp(cue_onset_pp),
            'cue_onset_vp':         _fmt_vp(vpixxTimes.get('cue')),
            'first_tone_onset_pp':  _fmt_pp(first_tone_onset_pp),
            'first_tone_onset_vp':  _fmt_vp(first_tone_onset_vp),
            'deviant_onset_pp':     _fmt_pp(deviant_onset_pp),
            'deviant_onset_vp':     _fmt_vp(deviant_onset_vp),
            'response_button':      response_button,
            'response_key_name':    response_key_name,
            'response_time_pp':     _fmt_pp(response_time_pp),
            'response_time_vp_est': _fmt_vp(response_time_vp_est),
            'rt_pp':                '' if (rt_pp != rt_pp) else '%.4f' % rt_pp,
            'rt_vp_est':            '' if (DUMMY_VPIXX or rt_vp_est != rt_vp_est) else '%.4f' % rt_vp_est,
            'outcome':              outcome,
            'feedback_shown':       feedback_shown,
            'blink_onset_pp':       _fmt_pp(blink_onset_pp),
            'blink_onset_vp':       _fmt_vp(blink_onset_vp),
            'dummy_vpixx':          DUMMY_VPIXX,
        })

        for row in tones_log_rows:
            tones_log_writer.writerow(row)
        tones_log_rows.clear()

        for row in presses_log_rows:
            presses_log_writer.writerow(row)
        presses_log_rows.clear()

        # Keep running tallies for the end-of-experiment summary
        if is_training_bool:
            training_results.append(outcome)
        else:
            main_results.append((block_label, outcome))

        # Flush to disk after every trial (crash-safe)
        for _fh in (_trials_log_fh, _tones_log_fh, _presses_log_fh):
            _fh.flush()
  Routine trainingTransition
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    CodeComponent trainingTransitionText
      Code Type = Py
      Begin Routine:
        # ======================================================================
        # trainingTransitionText  |  "Begin Routine" tab  |  routine: trainingTransition
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: once, after the training block ends and before the
        #               first main block starts.
        #
        # WHAT IT DOES: computes the subject's training-block accuracy and
        #               builds a message that includes it, so the experimenter
        #               can decide whether the subject is ready. The message
        #               is displayed by the transitionDisplay TextComponent in
        #               this routine (its text field is $transition_text).
        #
        # WHERE THE NAMES COME FROM:
        #   training_results - logFilesSetup Begin Experiment (list of outcome
        #                      strings, appended at trialLog End Routine)
        # ======================================================================

        _n_training = len(training_results)
        _n_correct  = sum(1 for o in training_results if o == 'correct')
        _pct = 100.0 * _n_correct / _n_training if _n_training > 0 else 0.0

        transition_text = (
            'Training complete.\n\n'
            'Correct: %d/%d (%.1f%%)\n\n'
            'The main experiment will now begin.\n\n'
            'Experimenter: press SPACE to start the main experiment.'
        ) % (_n_correct, _n_training, _pct)
    TextComponent transitionDisplay
      letterHeight = 36
      startVal [time (s)] = 0
      text [set every repeat] = $transition_text
      units = pix
      wrapWidth = 1500
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    KeyboardComponent transitionGo
      allowedKeys = "space","escape"
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine eyelinkDriftCheck_post_training
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    DriftCheck eyelinkDriftCheck_post_training_component plugin="psychopy-eyelink"
      backgroundColor = win.color
      driftCheckFilenames = 'qbeep.wav','type.wav','error.wav'
      driftCheckSounds = defaults
      foregroundColor = (1,1,1)
      screenUnitType = pix
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      targetFilename = images/fixTarget.bmp
      targetPosition = [0,0]
      targetSize = 24
      targetType = picture
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  Routine breakScreen
    RoutineSettingsComponent breakScreen
      skipIf = block_loop.thisN >= block_loop.nReps - 1
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    CodeComponent breakControl
      Code Type = Py
      Begin Routine:
        # ======================================================================
        # breakControl  |  "Begin Routine" tab  |  routine: breakScreen
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: once at the start of each between-block break (after
        #               blocks 1 and 2; skipped after block 3 via the
        #               routine's skipIf field).
        #
        # WHAT IT DOES: computes a block-accuracy summary line, starts a
        #               countdown clock, and clears any stale keyboard events.
        #               The actual display and SPACE/ESC handling happens in
        #               Each Frame below.
        #
        # WHERE THE NAMES COME FROM:
        #   block_loop.thisN      - Builder: 0-based index of the just-finished
        #                            main block
        #   main_results          - logFilesSetup Begin Experiment: list of
        #                            (block_label, outcome) tuples from the
        #                            main experiment, appended in trialLog
        #   INTERBLOCK_MIN_REST   - breakSetup Begin Experiment
        #   kb                    - responseClassifySetup Begin Experiment
        # ======================================================================

        # Compute this block's accuracy summary
        _block_done = block_loop.thisN + 1
        _this_block = [o for (b, o) in main_results if b == 'block_%d' % _block_done]
        _n_trials   = len(_this_block)
        _n_correct  = sum(1 for o in _this_block if o == 'correct')
        _pct        = 100.0 * _n_correct / _n_trials if _n_trials > 0 else 0.0

        # State for the countdown
        break_remaining = INTERBLOCK_MIN_REST
        break_space_ok  = False               # True once countdown finishes
        _break_clock    = core.Clock()        # resets to 0 here

        break_header = 'Block %d of 3 complete.' % _block_done
        break_summary = 'Correct: %d/%d (%.1f%%)' % (_n_correct, _n_trials, _pct)

        # Discard any key presses that happened during the trial loop so they
        # don't accidentally advance the break screen.
        kb.clearEvents()
      Each Frame:
        # ======================================================================
        # breakControl  |  "Each Frame" tab  |  routine: breakScreen
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: every frame of the break screen.
        #
        # WHAT IT DOES:
        #   1. Updates the countdown. Below INTERBLOCK_MIN_REST seconds,
        #      SPACE is ignored (break_space_ok=False) and the footer shows
        #      the time remaining. After, SPACE is enabled.
        #   2. Rebuilds break_message so the breakText TextComponent (whose
        #      text is $break_message, updated every frame) displays the
        #      current state.
        #   3. Polls kb for SPACE (advance) and ESC (abort experiment).
        #
        # WHY kb AND NOT event.getKeys (the old API):
        #   The two share a buffer on some PsychoPy Windows builds, so mixing
        #   them can swallow events. kb is the modern Keyboard interface.
        #
        # WHERE THE NAMES COME FROM:
        #   _break_clock, break_space_ok, break_remaining,
        #   break_header, break_summary        - Begin Routine (this component)
        #   INTERBLOCK_MIN_REST                - breakSetup (instruct routine)
        #   kb                                 - responseClassifySetup
        #   core                               - PsychoPy
        # ======================================================================

        elapsed = _break_clock.getTime()
        break_remaining = max(0.0, INTERBLOCK_MIN_REST - elapsed)

        if break_remaining > 0:
            # Still counting down -- SPACE ignored
            break_space_ok = False
            break_footer = 'Experimenter: SPACE available in %.0f s' % break_remaining
        else:
            # Countdown finished -- SPACE enabled
            break_space_ok = True
            break_footer = 'Experimenter: press SPACE to continue'

        # Build the full on-screen message. breakText TextComponent reads this
        # via $break_message with updates="set every frame".
        break_message = (break_header + '\n\n'
                         + break_summary + '\n\n'
                         + 'Rest for a moment.\nPlease stay still.\n\n'
                         + break_footer)

        # Check for keyboard input
        pressed = kb.getKeys(keyList=['space', 'escape'], waitRelease=False)
        for k in pressed:
            if k.name == 'escape':
                # Hard abort: skip remaining blocks and exit the experiment.
                print('[break] ESC pressed during break for block %d' % _block_done)
                continueRoutine = False
                core.quit()
            elif k.name == 'space' and break_space_ok:
                # Advance to the next block
                continueRoutine = False
                break
    TextComponent breakText
      letterHeight = 36
      startVal [time (s)] = 0
      text [set every frame] = $break_message
      units = pix
      wrapWidth = 1500
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  Routine eyelinkDriftCheck_between_blocks
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    DriftCheck eyelinkDriftCheck_between_blocks_component plugin="psychopy-eyelink"
      backgroundColor = win.color
      driftCheckFilenames = 'qbeep.wav','type.wav','error.wav'
      driftCheckSounds = defaults
      foregroundColor = (1,1,1)
      screenUnitType = pix
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      targetFilename = images/fixTarget.bmp
      targetPosition = [0,0]
      targetSize = 24
      targetType = picture
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  Routine thanks
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    CodeComponent pixelModeOff
      Code Type = Py
      Begin Routine:
        # ======================================================================
        # pixelModeOff  |  "Begin Routine" tab  |  routine: thanks
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: once, as the final 'thank you' screen appears, after
        #               the last block has ended.
        #
        # WHAT IT DOES: switches Pixel Mode OFF. From here on, whatever the
        #               top-left pixel shows (including the EyeLink plugin's
        #               file-copy progress screens, and any desktop content
        #               that briefly becomes visible during window teardown)
        #               does NOT reach the MEG trigger lines.
        # ======================================================================
        setTriggerPixel(TRIG_OFF)

        if not DUMMY_VPIXX:
            dp.DPxDisableDoutPixelMode()
            dp.DPxWriteRegCache()
            logging.exp('VPixx Pixel Mode B OFF')
    CodeComponent taskEndMsg
      Code Type = Py
      Begin Routine:
        # ======================================================================
        # taskEndMsg  |  "Begin Routine" tab  |  routine: thanks
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: once, as the final 'thank you' screen appears.
        #
        # WHAT IT DOES: writes "TASK_END" into the EDF, marking the end of the
        #               task period. Pairs with the "TASK_START" message that
        #               taskStartMsg wrote at the end of the instructions.
        #               Together they bracket the trial-containing section of
        #               the EDF for analysis.
        # ======================================================================
        el_tracker = pylink.getEYELINK()
        el_tracker.sendMessage('TASK_END')
    TextComponent endScreen
      letterHeight = 36
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      units = pix
      wrapWidth = 1500
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      text:
        All done - thank you!

        Please stay still while we save the data.
Flow
  Routine eyelinkSetup
  Routine instruct
  Routine eyelinkDriftCheck
  Routine triggersOn
  LoopInitiator training_trials loopType="TrialHandler"
    conditionsFile = $training_csv
    loopType = random
    nReps = 1
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    Routine trialSetup
    Routine fixation
    Routine cue
    LoopInitiator tone_loop_training loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = tone_loop_reps
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      Routine tone
    LoopTerminator tone_loop_training
    Routine response_window
    Routine feedback
    Routine blink
    Routine trialLog
  LoopTerminator training_trials
  Routine trainingTransition
  Routine eyelinkDriftCheck_post_training
  LoopInitiator block_loop loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 3
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    LoopInitiator block_trials loopType="TrialHandler"
      conditionsFile = $block_csvs[block_loop.thisN]
      loopType = random
      nReps = 1
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      Routine trialSetup
      Routine fixation
      Routine cue
      LoopInitiator tone_loop_main loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = tone_loop_reps
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        Routine tone
      LoopTerminator tone_loop_main
      Routine response_window
      Routine feedback
      Routine blink
      Routine trialLog
    LoopTerminator block_trials
    Routine breakScreen
    Routine eyelinkDriftCheck_between_blocks
  LoopTerminator block_loop
  Routine thanks
